PsychoPy2experiment version="2022.2.4"
Settings
  Audio lib = ptb
  Data filename = _data+expInfo['numero_mecanografico']
  Experiment info = {'numero_mecanografico': '', 'session': '1', 'idade': '', 'sexo': '', 'nacionalidade': 'Portuguesa'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Use version = 2022.2.4
  Window size (pixels) = [1536, 864]
  color = white
  expName = thesisproc_
  keyboardBackend = ioHub
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Routines
  Routine welcome
    TextComponent welcome_
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Bem-vind@!
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    VariableComponent _tipo
      saveEndRoutine = False
      saveStartExp = True
      saveStartStop = False
      startExpValue = str(randint(0, 2))
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    VariableComponent _group
      saveEndRoutine = False
      saveStartExp = True
      saveStartStop = False
      startExpValue = str(randint(1, 6))
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  Routine thankyou
    TextComponent thankyou_
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      wrapWidth = 1.5
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      text:
        Fim da experiência!

        Obrigada pela tua participação!
  Routine infcon
    TextComponent infcon_
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      wrapWidth = 1.65
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      text:
        CONSENTIMENTO INFORMADO

        Aqui encontras informação relativa ao estudo e à divulgação e confidencialidade dos dados obtidos, para esclarecimento total do participante. É necessário que leias com atenção a informação seguinte para compreenderes os detalhes inerentes à participação e proceder à assinatura do consentimento informado, esclarecido e livre.

        OBJETIVO DO ESTUDO: perceber a forma como são tomadas decisões durante a execução de uma tarefa de memória prospetiva (uma tarefa que implica a recordação de uma ação a ser desempenhada no futuro).

        DESCRIÇÃO DO ESTUDO, TAREFAS E DURAÇÃO: a participação nesta experiência é individual e ocorrerá numa única sessão de aproximadamente 35 minutos. Serão desempenhadas duas tarefas que serão explicadas previamente.

        RISCOS  ASSOCIADOS À PARTICIPAÇÃO NESTA INVESTIGAÇÃO: não se antecipa qualquer risco ou desconforto associado à participação neste estudo.

        USO DOS RESULTADOS DA INVESTIGAÇÃO E CONFIDENCIALIDADE: os resultados serão usados apenas para fins de investigação, nomeadamente apresentações em encontros científicos e a sua publicação em revistas científicas. Nunca haverá associação entre a resposta individual de um participante e o seu dado específico. De acordo com o Regulamento Geral da Proteção de Dados estes serão guardados em lugar inacessível por outros durante um período de pelo menos 5 anos. Está assim salvaguardado o direito ao anonimato e a confidencialidade dos dados.

        DIREITOS DO PARTICIPANTE DA INVESTIGAÇÃO: a participação no estudo é voluntária e envolve a creditação de 3 pontos através do Sistema de Creditação pela Participação em Investigação da Escola de Psicologia. Podes desistir a qualquer momento sem que isso envolva qualquer prejuízo para ti.

        Não aceito participar: <fecha a janela>
        Aceito participar: <pressiona a barra de espaços>
    KeyboardComponent space1_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine filler2
    SliderComponent slider
      borderColor = Black
      color = Black
      fillColor = Black
      forceEndRoutine = False
      granularity = 0
      labels = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
      letterHeight = 0.03
      pos = (0, -0.25)
      size = (1.0, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      styles = slider
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    TextComponent random_
      color = black
      letterHeight = 0.5
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $randint(1, 10)
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    TextComponent white
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1
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  Routine filler2inst
    TextComponent filler2inst_
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Em seguida serão apresentados números e deves selecionar o seu correspondente, utilizando o cursor, na escala apresentada abaixo do número.



        <Pressiona a barra de espaços para começar>
    KeyboardComponent space5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trainLDTinst1
    TextComponent trainLDTinst1_
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.6
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      text:
        Pedimos-te que realizes uma tarefa de decisão lexical.


        Por favor, pressiona “M” se consideras que o conjunto de letras apresentadas no ecrã corresponde a uma palavra do Português Europeu.


        Se consideras que o conjunto de letras apresentado
        não corresponde a uma palavra do Português Europeu, pressiona “Z”.


        Mantém o indicador direito na tecla M e o indicador esquerdo na tecla Z durante a experiência.


        <Pressiona a barra de espaços para avançar>
    KeyboardComponent space1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trainLDTinst2
    TextComponent trainLDTinst2_
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Terás agora a oportunidade de praticar esta tarefa.





        <Pressiona a barra de espaços para avançar para o treino>
    KeyboardComponent space2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine REC
    TextComponent blank__2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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    TextComponent fix__2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent REC_
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 2
      text [set every repeat] = $Stimulus
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    KeyboardComponent zeroone
      allowedKeys = '0','1'
      correctAns = $CorrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 2
      store = first key
      storeCorrect = True
      syncScreenRefresh = False
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  Routine LDT
    TextComponent blank_
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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    TextComponent fix_
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent LDTstimulus_
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 2
      text [set every repeat] = $Stimulus
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    KeyboardComponent zm
      allowedKeys = 'z','m'
      correctAns = $CorrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 2
      store = first key
      storeCorrect = True
      syncScreenRefresh = False
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  Routine RECinst
    TextComponent RECinst_
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Chegamos à última parte da experiência.

        Irás agora visualizar um conjunto de palavras e decidir o mais depressa e corretamente possível se estas já foram apresentadas anteriormente ou não.

        Caso a palavra tenha sido apresentada, pressiona "1", caso seja uma nova palavra pressiona "0".



        <Pressiona a barra de espaços para começar>
    KeyboardComponent space6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine LDTinstrec
    ButtonComponent LDTinstrecbutton
      bold = False
      borderColor = black
      color = black
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      size = [1, 0.2]
      startVal [time (s)] = 0
      text = <Clica aqui para avançar>
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    TextboxComponent LDTinstrecres_
      bold = False
      color = black
      editable = True
      letterHeight = 0.05
      pos = (0, 0.1)
      size = 1.5
      startVal [time (s)] = 0.0
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      text:
        Por favor, descreve o que terás de fazer durante a tarefa.
  Routine ready_
    TextComponent ready
      color = black
      letterHeight = 0.05
      wrapWidth = 2
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      text:
        Pronto/a?


        <Pressiona a barra de espaços para começar>
    KeyboardComponent space4_2
      allowedKeys = 'space'
      forceEndRoutine = True
      store = nothing
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  Routine surroundings
    TextComponent surroundings_
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      wrapWidth = 1.65
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      text:
        ATENÇÃO


        Esta experiência tem a duração aproximada de 35 MINUTOS.

        Procura um local onde possas assegurar que não vais ser interrompid@ por outras pessoas e/ou animais de estimação.

        DESATIVA AS NOTIFICAÇÕES do telemóvel e/ou computador, para não seres interrompid@.


        Esta experiência deve apenas ser realizada num computador com sistema operativo WINDOWS, usando o navegador de internet GOOGLE CHROME. Caso não cumpras este requisito, fecha a janela e contacta a experimentadora.


        Certifica-te que o teu computador tem BATERIA SUFICIENTE e/ou que está ligado à corrente.

        FECHA as aplicações/janelas que estão abertas para que não interfiram com a realização da experiência e coloca o ZOOM desta janela a 100%.


        Se achas que estão reunidas estas condições, por favor avança.
        Caso contrário, pedimos que feches a janela e voltes noutra altura mais apropriada.


        Agradecemos a tua participação!


        <Pressiona a barra de espaços para avançar>
    KeyboardComponent space1_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine LDTinst1
    TextComponent LDTinst__1
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text [set every repeat]:
        Irás agora desempenhar esta mesma tarefa de decisão lexical carregando nas teclas Z e M de acordo com as instruções que te demos.

        No entanto, agora, sempre que um estímulo (seja uma palavra ou não) contiver a sílaba <sa>, deverás carregar na tecla V.

        Ou seja, no caso em que um estímulo (seja uma palavra ou não) tenha a sílabas referida (<sa>) a tua resposta não deve ser Z ou M, mas V.


        <Pressiona a barra de espaços para avançar>
  Routine LDTinst2
    TextComponent LDTinst__2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text [set every repeat]:
        Irás agora desempenhar esta mesma tarefa de decisão lexical carregando nas teclas Z e M de acordo com as instruções que te demos.

        No entanto, agora, sempre que um estímulo (seja uma palavra ou não) contiver a sílaba <nal>, ou <tar> ou <pos> deverás carregar na tecla V.

        Ou seja, no caso em que um estímulo (seja uma palavra ou não) tenha uma das sílabas referidas (<nal>, <tar> ou <pos>) a tua resposta não deve ser Z ou M, mas V.


        <Pressiona a barra de espaços para avançar>
  Routine LDTinst
    TextComponent LDTinst_0
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $InstLDT
      wrapWidth = 1.5
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    KeyboardComponent space3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine colours
    TextboxComponent colours_
      bold = False
      color = black
      editable = True
      letterHeight = 0.05
      pos = (0, 0.1)
      size = (1.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 35
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      text [set every repeat]:
        Escreve por favor, nomes de cores.
  Routine bodyparts
    TextboxComponent bodyparts_
      bold = False
      color = black
      editable = True
      letterHeight = 0.05
      pos = (0, 0.1)
      size = 1.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 35
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      text:
        Escreve, por favor, nomes de partes do corpo.
  Routine countries
    TextboxComponent countries_
      bold = False
      color = black
      editable = True
      letterHeight = 0.05
      pos = (0, 0.1)
      size = (1.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 35
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      text [set every repeat]:
        Escreve por favor, nomes de países.
  Routine fruits
    TextboxComponent fruits_
      bold = False
      color = black
      editable = True
      letterHeight = 0.05
      pos = (0, 0.1)
      size = (1.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 35
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      text [set every repeat]:
        Escreve por favor, nomes de frutos.
  Routine furniture
    TextboxComponent furniture_
      bold = False
      color = black
      editable = True
      letterHeight = 0.05
      pos = (0, 0.1)
      size = (1.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 35
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      text [set every repeat]:
        Escreve por favor, nomes de artigos de mobiliário.
Flow
  Routine welcome
  Routine surroundings
  Routine infcon
  Routine trainLDTinst1
  Routine trainLDTinst2
  LoopInitiator LDTtrainloop loopType="TrialHandler"
    conditionsFile = lists/ldttraintrials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Stimulus': 'pamecão', 'Type': 'p', 'CorrAns': 'z'},
      {'Stimulus': 'pintura', 'Type': 'w', 'CorrAns': 'm'},
      {'Stimulus': 'mandoco', 'Type': 'p', 'CorrAns': 'z'},
      {'Stimulus': 'micla', 'Type': 'p', 'CorrAns': 'z'},
      {'Stimulus': 'escritor', 'Type': 'w', 'CorrAns': 'm'},
      {'Stimulus': 'dólar', 'Type': 'w', 'CorrAns': 'm'},
      {'Stimulus': 'vonceder', 'Type': 'p', 'CorrAns': 'z'},
      {'Stimulus': 'anúncio', 'Type': 'w', 'CorrAns': 'm'},
      {'Stimulus': 'conversa', 'Type': 'w', 'CorrAns': 'm'},
      {'Stimulus': 'çanda', 'Type': 'p', 'CorrAns': 'z'}]
    Routine LDT
  LoopTerminator LDTtrainloop
  LoopInitiator LDTintsloop loopType="TrialHandler"
    conditionsFile = $'lists/'+_tipo+'.xlsx'
    loopType = random
    nReps = 1
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    Routine LDTinst
  LoopTerminator LDTintsloop
  Routine LDTinstrec
  LoopInitiator filler1loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 1
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    Routine bodyparts
    Routine countries
    Routine fruits
    Routine colours
    Routine furniture
  LoopTerminator filler1loop
  Routine ready_
  LoopInitiator LDTloop loopType="TrialHandler"
    conditionsFile = $'lists/'+'LDT'+_grupo+'.xlsx'
    loopType = random
    nReps = 1
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    Routine LDT
  LoopTerminator LDTloop
  Routine filler2inst
  LoopInitiator filler2loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 45
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    Routine filler2
  LoopTerminator filler2loop
  Routine RECinst
  LoopInitiator RECloop loopType="TrialHandler"
    conditionsFile = $'lists/'+'REC'+_grupo+'.xlsx'
    loopType = random
    nReps = 1
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    Routine REC
  LoopTerminator RECloop
  Routine thankyou
